PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = wordfragmentation
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $studywords
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Admin/Desktop/Lab in psych practical/studywords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'studyWords': 'vase '},
      {'studyWords': 'tiger '},
      {'studyWords': 'book '},
      {'studyWords': 'cushion'},
      {'studyWords': 'piano '},
      {'studyWords': 'hello '},
      {'studyWords': 'bell '},
      {'studyWords': 'nail '},
      {'studyWords': 'plate '},
      {'studyWords': 'house '}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Admin/Desktop/Lab in psych practical/testwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_as_'},
      {'test': 't_g_r'},
      {'test': 'b_o_'},
      {'test': 'cu_s_i_n'},
      {'test': '_i_n_'},
      {'test': '_e_l_'},
      {'test': 'b_l_'},
      {'test': '_a_l'},
      {'test': 'p_a_t_'},
      {'test': '_o_s_'},
      {'test': 'f_t_'},
      {'test': '_l_e_'},
      {'test': 'm_a_'},
      {'test': 's_m_'},
      {'test': 'm_u_e'},
      {'test': 'r_i_'},
      {'test': 'b_e_k'},
      {'test': 'b_a_e'},
      {'test': '_a_e'},
      {'test': 'f_o_e_'},
      {'test': 'n_m_'}]
    Routine test
  LoopTerminator trials_2
